OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)
0x790d75b8 = Tiaan Boshoff
0x8c1fc55b = 1
0x9f5c4075 = Acquisition Client On-Off Switch
0xf6b2e3fa = Streaming
0xf8034a49 = Okanagan Visualisation and Interaction Lab
Settings
  Close switch trigger = 0
  Open switch trigger = OVTK_StimulationId_Number_01
Input Switch trigger input -> #0
Input Experiment information -> #1.Matrix
Input Signal stream -> #2.Matrix
Input Stimulations -> #3.Matrix
Input Channel localisation -> #4.Matrix
Input Channel units -> #5.Matrix
Output Experiment information <- #1.Output
Output Signal stream <- #2.Output
Output Stimulations <- #3.Output
Output Channel localisation <- #4.Output
Output Channel units <- #5.Output

Identity => #0
Triggers=#0 -> Stream Switch => #1
  Default to output 1 = true
  Switch stim for output 1 = $var{Close switch trigger}
  Switch stim for output 2 = $var{Open switch trigger}
Triggers=#0 -> Stream Switch => #2
  Default to output 1 = true
  Switch stim for output 1 = $var{Close switch trigger}
  Switch stim for output 2 = $var{Open switch trigger}
Triggers=#0 -> Stream Switch => #3
  Default to output 1 = true
  Switch stim for output 1 = $var{Close switch trigger}
  Switch stim for output 2 = $var{Open switch trigger}
Triggers=#0 -> Stream Switch => #4
  Default to output 1 = true
  Switch stim for output 1 = $var{Close switch trigger}
  Switch stim for output 2 = $var{Open switch trigger}
Triggers=#0 -> Stream Switch => #5
  Default to output 1 = true
  Switch stim for output 1 = $var{Close switch trigger}
  Switch stim for output 2 = $var{Open switch trigger}
