PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = gradCPT
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
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      Before Experiment:
        import argparse
        import json
        import csv

        # Constants
        STIM_TRANSITION_TIME = 2
        STIM_STATIC_TIME = 1

        DEBUG = 1

        parser = argparse.ArgumentParser()
        parser.add_argument(
            "-fi",
            "--infoFile",
            help="The path to the info file specifying details of this session.",
            required=True
            )
        args = parser.parse_args()
        infoFile = args.infoFile

        with open(infoFile, "r") as f:
            info = json.load(f)

        blocksFile = info["blocks_file"]
      Begin Routine:
        if DEBUG >= 1:
            print(f"current stimulus: {stimulus_path}")
            print(f"last stimulus:    {last_stimulus_path}")
            print("")
      End Routine:
        last_stimulus_path = stimulus_path
    ImageComponent last_stimulus
      image [set every repeat] = $last_stimulus_path
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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    ImageComponent transitioning_stimulus
      image [set every repeat] = $stimulus_path
      opacity [set every frame] = t/STIM_TRANSITION_TIME
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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    ImageComponent static_stimulus
      image [set every repeat] = $stimulus_path
      size = (0.5, 0.5)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.4
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  Routine preBlock
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        # Get first and last stimuli shown for this block
        with open(stimSeqFile, "r") as f:
            dictReader = csv.DictReader(f)
            for row in dictReader:
                if dictReader.line_num == 1:
                    firstStim = dict(row)
                else:
                    pass
            lastStim = dict(row)

        # Use the last stimuli to transition to the first
        last_stimulus_path = lastStim["stimulus_path"]
Flow
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $blocksFile
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine preBlock
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $stimSeqFile
      loopType = sequential
      nReps = 1
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      Routine trial
    LoopTerminator trials
  LoopTerminator blocks
